// !batch_SelectCrop.ijm
// Interactive crop: plays each open movie, waits for you to draw a selection,
// then crops all channels/frames to it.
//
// Usage:  open the movies, edit the parameters below, run. Draw a selection, click OK.
//         Images with no selection are skipped (closed without saving).
// Output: <name>_crop.tif

// ===== PARAMETERS =====
output_folder_path = "/Volumes/DOM_SEVEN/!Ect2-FL-tagged-waves-vs-PIPs/!combined/raw_crop/"; // "" = ask
preview_speed = 55;   // playback fps while choosing
saved_speed   = 30;   // playback fps stored in the saved file
// ======================

output_folder_path = prepareOutputFolder(output_folder_path);

while (nImages > 0) {
	otherIDs = getOtherImageIDs();
	inputID = getImageID();
	title = getTitle();
	baseName = getBaseName(title);

	run("Animation Options...", "speed=" + preview_speed);
	doCommand("Start Animation [\\]");
	waitForUser("Select the ROI to crop for " + title);
	selectImage(inputID);

	if (selectionType() == -1) {
		print("Skipped (no selection): " + title);
	} else {
		run("Crop");
		run("Animation Options...", "speed=" + saved_speed);
		saveAs("Tiff", output_folder_path + baseName + "_crop.tif");
	}
	closeAllExcept(otherIDs);
}


// ===== HELPERS =====

// Returns a usable output folder: asks if empty, adds a trailing slash, and
// creates it (including any missing parent folders).
function prepareOutputFolder(path) {
	if (path == "") path = getDirectory("Choose an output folder");
	if (!endsWith(path, "/")) path = path + "/";
	parts = split(path, "/");
	dir = "";
	if (startsWith(path, "/")) dir = "/";
	for (i = 0; i < parts.length; i++) {
		dir = dir + parts[i] + "/";
		if (!File.exists(dir)) File.makeDirectory(dir);
	}
	return path;
}

// Returns the title without its file extension.
function getBaseName(title) {
	dot = lastIndexOf(title, ".");
	if (dot < 0) return title;
	return substring(title, 0, dot);
}

// Returns the IDs of every open image except the active one, which stays active.
function getOtherImageIDs() {
	activeID = getImageID();
	ids = newArray(0);
	for (i = 1; i <= nImages; i++) {
		selectImage(i);
		if (getImageID() != activeID) ids = Array.concat(ids, getImageID());
	}
	selectImage(activeID);
	return ids;
}

// Closes every open image whose ID is not in keepIDs.
function closeAllExcept(keepIDs) {
	for (i = nImages; i >= 1; i--) {
		selectImage(i);
		id = getImageID();
		keep = false;
		for (k = 0; k < keepIDs.length; k++) if (keepIDs[k] == id) keep = true;
		if (!keep) close();
	}
}
