// This script crops all open images to the user-selected ROI and saves them as TIFF files in a specified folder.

// Define the folder where cropped images will be saved
output_folder_path = "/Volumes/T7/173DCE/LS/en_face/raw_bleach_corr_crop_diff/kymo/";

while (nImages > 0) {
	// Get the name of the current image
    fileName = getTitle();
	//saves image name for future use
	dotIndex = indexOf(fileName, ".");  
	//this and the following line get the file name without the extension
	fileNameWithoutExtension = substring(fileName, 0, dotIndex); 
	newFileName = fileNameWithoutExtension + "_kymo.tif" ;
	
	// start the animation of the movie
	run("Animation Options...", "speed=20");
	doCommand("Start Animation [\\]");

	waitForUser("Select the ROI for " + fileName);
	selectWindow(fileName);
	
	//crop the image to the ROI
	run("Reslice [/]...", "output=1.000 slice_count=1 avoid");;
	saveAs("Tiff", output_folder_path + newFileName);
	close();
	close();


}