// Define the folder where cropped images will be saved
output_folder_path = "/Volumes/DOM_EIGHT/pos-feedback-paper-data/260824-figureFiles/Fig5_GEF4A/";

while (nImages > 0) {

	// Get the name of the current image
    image_title = getTitle();
    getDimensions(width, height, channels, slices, frames);		

    // Remove the file extension from the image title
    dot_index = lastIndexOf(image_title, ".");  
    if (dot_index == -1) dot_index = lengthOf(image_title); // handle case w/ no extension
    image_title_without_extension = substring(image_title, 0, dot_index); 
    
    // Save the full stack/movie as AVI
    saveAs("JPEG", output_folder_path + image_title_without_extension + ".jpg");
    
    // Split into channels
    run("Split Channels");

    // Loop through however many channels were split
    for (i = 1; i <= channels; i++) {
        selectWindow("C" + i + "-" + image_title);
        run("Grays");
        run("Enhance Contrast", "saturated=0.35");
        saveAs("JPEG", output_folder_path + image_title_without_extension + "_Ch" + i + ".jpg");
        close();
    }
}